CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.', 'WARNING: LoadSingleImage used metadata matching. The conversion might match files that were not matched by the legacy module.', 'WARNING: LoadSingleImage used metadata matching. The conversion might match files that were not matched by the legacy module.', 'WARNING: LoadSingleImage used metadata matching. The conversion might match files that were not matched by the legacy module.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.+?)\\\\_IllumDAPI\\\\.mat$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumDAPI\\\\\\\\.mat$")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.+?)\\\\_IllumActin\\\\.mat$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumActin\\\\\\\\.mat$")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.+?)\\\\_IllumTubulin\\\\.mat$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumTubulin\\\\\\\\.mat$")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', u'WARNING: LoadSingleImage used metadata matching for the DAPIillum image. The conversion might match files that were not matched by the legacy module.', u'WARNING: LoadSingleImage used metadata matching for the ActinIllum image. The conversion might match files that were not matched by the legacy module.', u'WARNING: LoadSingleImage used metadata matching for the TubIllum image. The conversion might match files that were not matched by the legacy module.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumDAPI\\\\\\\\.mat$")
    Name to assign these images:DAPIillum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumActin\\\\\\\\.mat$")
    Name to assign these images:ActinIllum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "^(?P<Plate>.+?)\\\\\\\\_IllumTubulin\\\\\\\\.mat$")
    Name to assign these images:TubIllum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
LoadData:[module_num:5|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
    Input data file location:Default Input Folder sub-folder|Downloads
    Name of the file:metadata_new.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:6|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
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:DAPIillum
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:7|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
    Select the input image:Actin
    Name the output image:CorrActin
    Select the illumination function:ActinIllum
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:8|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
    Select the input image:Tubulin
    Name the output image:CorrTub
    Select the illumination function:TubIllum
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:9|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
    Input:CorrDAPI
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,115
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrActin
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    Regularization factor:0.05
    Name the outline image:CellOutline
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:12|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enabled:False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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:13|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enabled:False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
    Hidden:1
    Select an image to measure:CorrDAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:14|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enabled:False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
    Hidden:1
    Select an image to measure:CorrActin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:15|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enabled:False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
    Hidden:1
    Select an image to measure:CorrTub
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectNeighbors:[module_num:16|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:3
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:20|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enabled:False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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:CorrDAPI
    Select objects to measure:Nuclei
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:21|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enabled:False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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CorrActin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:22|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enabled:False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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CorrTub
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:23|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enabled:False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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:CorrDAPI
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:24|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enabled:False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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CorrActin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:25|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enabled:False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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CorrTub
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

SaveImages:[module_num:26|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPIillum
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:30|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
    Select the input objects:Cytoplasm
    Name the output image:CytoplasmImage
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:31|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:uint16
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/santiagobenoit

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:CytoplasmImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytoplasm
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/santiagobenoit

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines\\\\\\\\\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/santiagobenoit

ExportToDatabase:[module_num:35|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enabled:False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
    Database type:MySQL
    Database name:2013_01_02_IlluminationCorrection
    Add a prefix to table names?:Yes
    Table prefix:MorphologyAnalysis_posneg_WithICFs_Median500M_
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    Output file location:Default Output Folder|.
    Create a CellProfiler Analyst properties file?:Yes
    Database host:imgdb02
    Username:cpuser
    Password:cPus3r
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:Actin,CellOutline,DAPI,Tubulin
    Auto-scale thumbnail pixel intensities?:No
    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:4
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:Yes
    Select the classification type:Object
    Select an image to include:Actin
    Use the image name for the display?:Yes
    Image name:None
    Channel color:green
    Select an image to include:CellOutline
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:gray
    Select an image to include:DAPI
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:red
    Select an image to include:Tubulin
    Use the image name for the display?:Yes
    Image name:Channel4
    Channel color:blue
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:36|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\\\\g<Plate>_\\\\g<Well>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Cytoplasm|Parent_Cells,Cytoplasm|Parent_Nuclei,Cytoplasm|Number_Object_Number,Cytoplasm|Texture_InfoMeas2_CorrTub_10_0,Cytoplasm|Texture_InfoMeas2_CorrTub_3_0,Cytoplasm|Texture_InfoMeas2_CorrActin_10_0,Cytoplasm|Texture_InfoMeas2_CorrActin_3_0,Cytoplasm|Texture_DifferenceVariance_CorrTub_10_0,Cytoplasm|Texture_DifferenceVariance_CorrTub_3_0,Cytoplasm|Texture_DifferenceVariance_CorrActin_10_0,Cytoplasm|Texture_DifferenceVariance_CorrActin_3_0,Cytoplasm|Texture_SumVariance_CorrTub_10_0,Cytoplasm|Texture_SumVariance_CorrTub_3_0,Cytoplasm|Texture_SumVariance_CorrActin_10_0,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:37|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
